;ti13Ccpmg_hsqc24

;The time schedule should be made by ...pl.
;230112 by Ikegami Takahisa.
;13C-CPMG T2 measurement with HSQC (13C)
;Constant relaxation time CPMG dispersion
;Echo-antiecho (no SE) for selecting 13C of the natural abundance
;A new phase cycle of 0, 0/2, 2, 1, 0, 2, 1

; 230203
; PL23 -> PL6
; PL21 -> PL7
; PL30 -> PL8	Be careful that the CPD program contains no PL30 or 31.

;------------------------------------------------
; Set L8 (such as 10) for the number of sampling points.
; NBL = L8
; in an interleaved manner for FID
;------------------------------------------------

#include <Avance.incl>
#include <Grad.incl>

;#define EXE1D

#ifdef EXE1D
 "d0=4u"
#else
 "in0=inf1/2"
 "d0=inf1/4"
 "l0=(td1)/(2*l8)"
#endif

"l7=1"		; reference=1 for CPMG
"l5=1"
"l6=1"
"p2=p1*2"
"p6=p5*2"
"p7=p21*2/3"		;  60 degrees
"p8=p21*10/3"		; 300 degrees
;"d3=p1*2-p21+5u"	; or d9
"d4=p21*2/3.14159"
;"d9=p21-p1*2-5u"	; or d3
;"d5=p21*5/3-p1*2-5u"
"d8=p21*7/3-p1*2"
"p22=p21*2"		; for CPMG 180 deg pulses
"d2=p5*2-p1+5u"
"d6=p5-p1"
"d7=p1*4+10u"
"d11=50m"
"d13=1s/(cnst2*4)-1.4m-p21*2/3.14*2.2"	; 2.2 for 60-300-60 pulses
"d17=10m"
"d19=10m"
"d15=1s/(cnst2*4)-800u"
"d21=1s/(cnst2*4)-1.4m"
"d22=1s/(cnst2*4)"

1 ze
#ifdef EXE1D
  d11
#else
  d11 st0
#endif
  d11 do:f1
  d11 do:f3
2 d11 do:f2
  d11*2
3 d11 do:f2
  d11*2
4 d11 do:f2
  d11*5
5 d11 do:f2
  d11 pl6:f2		; power for temperature compensation pulses
;
; The perl output should be inserted below.
; Change the order randomly.
;
; Paste here
;
if "l7==1" goto v01		; reference
if "l7==2" goto v02
if "l7==3" goto v03
if "l7==4" goto v04
if "l7==5" goto v05
if "l7==6" goto v06
if "l7==7" goto v07
if "l7==8" goto v08
if "l7==9" goto v09
if "l7==10" goto v10
if "l7==11" goto v02	; v11
if "l7==12" goto v12
if "l7==13" goto v13
if "l7==14" goto v14
if "l7==15" goto v15
if "l7==16" goto v16
if "l7==17" goto v17
if "l7==18" goto v18
;
; otherwise goto v01
;
v01, d11
   "l6=0"		; 0.00 Hz
   "d17=1m"		; dummy
   "l5=66"
   "d19=7.576m-p21"
   d11
   goto v70
v02, d11
   "l6=1"		; 50.00 Hz v=L6/[Tcp/2]
   "d17=5.00000m-p21"	; Tcp/(8*L6)
   "l5=62"		; L5=66-4*L6
   "d19=8.065m-p21"	; 1s/(2*L5)
   d11
   goto v70
v03, d11
   "l6=2"		; 100.00 Hz
   "d17=2.50000m-p21"
   "l5=58"
   "d19=8.621m-p21"
   d11
   goto v70
v04, d11
   "l6=3"		; 150.00 Hz
   "d17=1.66667m-p21"
   "l5=54"
   "d19=9.259m-p21"
   d11
   goto v70
v05, d11
   "l6=4"		; 200.00 Hz
   "d17=1.25000m-p21"
   "l5=50"
   "d19=10.000m-p21"
   d11
   goto v70
v06, d11
   "l6=5"		; 250.00 Hz
   "d17=1.00000m-p21"
   "l5=46"
   "d19=10.870m-p21"
   d11
   goto v70
v07, d11
   "l6=6"		; 300.00 Hz
   "d17=833.33u-p21"
   "l5=42"
   "d19=11.905m-p21"
   d11
   goto v70
v08, d11
   "l6=7"		; 350.00 Hz
   "d17=714.29u-p21"
   "l5=38"
   "d19=13.158m-p21"
   d11
   goto v70
v09, d11
   "l6=8"		; 400.00 Hz
   "d17=625.00u-p21"
   "l5=34"
   "d19=14.706m-p21"
   d11
   goto v70
v10, d11
   "l6=9"		; 450.00 Hz
   "d17=555.56u-p21"
   "l5=30"
   "d19=16.667m-p21"
   d11
   goto v70
v11, d11
   "l6=9"		; 450.00 Hz
   "d17=555.56u-p21"
   "l5=30"
   "d19=16.667m-p21"
   d11
   goto v70
v12, d11
   "l6=10"		; 500.00 Hz
   "d17=500.00u-p21"
   "l5=26"
   "d19=19.231m-p21"
   d11
   goto v70
v13, d11
   "l6=11"		; 550.00 Hz
   "d17=454.55u-p21"
   "l5=22"
   "d19=22.727m-p21"
   d11
   goto v70
v14, d11
   "l6=12"		; 600.00 Hz
   "d17=416.67u-p21"
   "l5=18"
   "d19=27.778m-p21"
   d11
   goto v70
v15, d11
   "l6=13"		; 650.00 Hz
   "d17=384.62u-p21"
   "l5=14"
   "d19=35.714m-p21"
   d11
   goto v70
v16, d11
   "l6=14"		; 700.00 Hz
   "d17=357.14u-p21"
   "l5=10"
   "d19=50.000m-p21"
   d11
   goto v70
v17, d11
   "l6=15"		; 750.00 Hz
   "d17=333.33u-p21"
   "l5=6"
   "d19=83.333m-p21"
   d11
   goto v70
v18, d11
   "l6=16"		; 800.00 Hz
   "d17=312.50u-p21"
   "l5=2"
   "d19=250.000m-p21"
   d11
   goto v70

;---------
; d14 = 40 m
; l8 = 18
; up to here
;
    d11
v70, d29
;------------------- compensation
61 d19
   (p22 ph10):f2
   d19
   lo to 61 times l5
;----------------------- 1 sec.
  d11
  d11 UNBLKGRAD
  100u pl7:f2
  (p21 ph10):f2
  20u
  1mp:gp11
  200u
  200u pl1:f1
;
  (p1 ph10):f1
  20u
  1mp:gp13
  200u
  180u pl5:f2
  d21
  (d2 p2 ph10):f1 (p5 ph10 5u p6 ph11 5u p5 ph10):f2
  d21
  1mp:gp13
  400u
  (p1 ph9):f1
  10u
;  20u pl0:f1
;  (1mp:sp25 ph25:r):f1	;Gauss 1ms = rect 411.194us
;  10u
  1mp:gp16
  100u
  200u fq=cnst14:f2	; cpmg from off-resonance
  100u pl7:f2		;lower power(20-46u@90deg)
  (p21 ph10):f2
  20u
  1mp:gp15
  200u
  (p7 ph13):f2
  (p8 ph11):f2
  (p7 ph13):f2
  20u
  1mp:gp15
  200u
  d4
;------------------------ CPMGy -2SyIz
if "l7==1" goto 62
60 d17			;tau-cp/8/n
   (p22 ph11):f2
   d17
   lo to 60 times l6
;------------------------ CPMGy
62 5u
   1mp:gp12
   d13
   400u pl1:f1
;   (p7 ph12):f2
;   (p8 ph10):f2 (d5 p1 ph11 5u p2 ph10 5u p1 ph11):f1
;   (p7 ph12):f2
   (p7 ph12 p8 ph10 p7 ph12):f2 (d8 p1 ph11 p2 ph10 p1 ph11):f1
;   (p1 ph11 5u p2 ph10 5u p1 ph11):f1 (d3 p22 ph10):f2
; OR There are two sites to modify.
;   (d9 p1 ph11 5u p2 ph10 5u p1 ph11):f1 (p22 ph10):f2
   d13
   1mp:gp12
   400u
   5u
;------------------------ CPMGx Sx
if "l7==1" goto 55
54 d17			;tau-cp/8/n
   (p22 ph10):f2
   d17
   lo to 54 times l6
;------------------------ CPMGx
55 20u
   1mp:gp10
   200u
;   (p22 ph16):f2
   (p7 ph17):f2
   (p8 ph16):f2
   (p7 ph17):f2
   20u
   1mp:gp10
   200u
;------------------------ CPMGx -Sx
if "l7==1" goto 56
57 d17			;tau-cp/8/n
   (p22 ph12):f2
   d17
   lo to 57 times l6
;------------------------ CPMGx
56 5u
   1mp:gp2
   d13
   400u
;   (p7 ph13):f2
;   (p8 ph11):f2 (d5 p1 ph11 5u p2 ph10 5u p1 ph11):f1
;   (p7 ph13):f2
   (p7 ph10 p8 ph12 p7 ph10):f2 (d8 p1 ph11 p2 ph10 p1 ph11):f1
;  (p1 ph11 5u p2 ph10 5u p1 ph11):f1 (d3 p22 ph11):f2
; OR There are two sites to modify.
;   (d9 p1 ph11 5u p2 ph10 5u p1 ph11):f1 (p22 ph11):f2
   d13
   1mp:gp2
   400u
   5u
;------------------------ CPMGy +2SyIz
if "l7==1" goto 58
59 d17			;tau-cp/8/n
   (p22 ph11):f2
   d17
   lo to 59 times l6
;------------------------ CPMGy
58 20u
   d4
   1mp:gp19
   200u
   (p7 ph13):f2
   (p8 ph11):f2
   (p7 ph13):f2
   20u
   1mp:gp19
   200u
;58   (p21 ph1):f2
   (p21 ph1):f2
   10u
   1mp:gp14
   100u
   200u fq=0:f2
   100u pl5:f2
;
;----------- Echo-antiecho
;
  (p5 ph3):f2
  d0
  (p1 ph11 5u p2 ph10 5u p1 ph11):f1
  d0
  800up:gp24
  400u
  (p6 ph6):f2
  d7
  800up:gp24*-1
  400u
  (p5 ph4):f2
  10u
  1mp:gp17
  400u
  (p1 ph10):f1
;
  d22
  (d2 p2 ph10):f1 (p5 ph10 5u p6 ph11 5u p5 ph10):f2
  d15
  400up:gp25*EA
  200u
  100u pl8:f2
  100u BLKGRAD
;
#ifdef EXE1D
  go=2 ph0 cpd2:f2
  d11 do:f2 wr #0
#else
  goscnp ph0 cpd2:f2
  d11 do:f2
  d11 iu7
  d11 st
  lo to 2 times nbl
  d11 ru7
  d11 ipp0 ipp1 ipp16
  d11 ipp9 ipp6 ipp17
  lo to 3 times ns
  d11 do:f2 wr #0 if #0 zd
  d11 ru7
  d11 igrad EA
  lo to 4 times 2
  d11 id0
  d11 ip0
  d11 ip0
  d11 ip3
  d11 ip3
  d11 ru7
  lo to 5 times l0
#endif
;
  100u do:f1
  100u do:f3
  100u do:f2
  100u BLKGRAD
exit

; gp24*4t*0.25144953(13C) = gp25*t*1(1H), gp24=60%, gp25=60.35%

ph1=0 2
ph0=0 2 0 2 2 0 2 0
ph3=0
ph4=0
ph6=0 0 0 0 0 0 0 0
    2 2 2 2 2 2 2 2
ph8=0
ph10=0
ph11=1
ph25=0
ph5=1
ph16=0 0 2 2
ph17=2 2 0 0
ph9=1 1 1 1 3 3 3 3
ph12=2
ph13=3
;
