; ti13Ccpmg_hsqc_cw24
; Relaxation compensation CW version to compare with the double rc version
; Hansen, et al. (2008) J.Am.Chem.Soc. 130(8), 2669.
; Hansen, et al. (2008) J.Phys.Chem.B 112, 5898.

;The time schedule should be made by ...pl.
;230212 by Ikegami Takahisa.
;Constant relaxation time CPMG dispersion
;Echo-antiecho (no SE) for selecting 13C of the natural abundance
;The 1H offset should be on-resonance.

; 230203
; PL23 -> PL6	power for temperature compensation pulses
; PL21 -> PL7	CPMG pulse power
; PL30 -> PL8	Be careful that the CPD program contains no PL30 or 31.

;------------------------------------------------
; Set L8 (such as 10) for the number of sampling points.
; NBL = L8
; in an interleaved manner for FID
; p11 around 100us (weak power for reference)
;------------------------------------------------

#include <Avance.incl>
#include <Grad.incl>

;#define EXE1D

#ifdef EXE1D
 "d0=4u"
#else
 "in0=inf1/2"
 "d0=inf1/4"
 "l0=(td1)/(2*l8)"
#endif

"l7=1"		; reference=1 for CPMG
"l5=1"
"l6=1"
"p2=p1*2"
"p6=p5*2"
"p7=p21*2/3"		;  60 degrees
"p8=p21*10/3"		; 300 degrees
"d4=p21*2/3.14159"
"d8=p21*7/3-p1*2"
"p22=p21*2"		; for CPMG 180 deg pulses
"d2=p5*2-p1+5u"
"d6=p5-p1"
"d7=p1*4+10u"
"d11=50m"
"d17=10m"
"d19=10m"
"d15=1s/(cnst2*4)-800u"
"d21=1s/(cnst2*4)-1.4m"
"d22=1s/(cnst2*4)"
"d23=1s/(cnst2*10)-610u"	; for Methyl only
"d24=1s/(cnst2*10)-410u"	; for Methyl only
"d5=50u-p1*2/3.14159"

; ----- The following lines should be put before ze. -----

"plw12=plw11*pow(p11/19.23, 2)"
"plw13=plw11*pow(p11/19.23, 2)"
"plw14=plw11*pow(p11/18.94, 2)"
"plw15=plw11*pow(p11/18.94, 2)"
"plw16=plw11*pow(p11/19.23, 2)"
"plw17=plw11*pow(p11/18.94, 2)"
"plw18=plw11*pow(p11/18.80, 2)"
"plw19=plw11*pow(p11/18.38, 2)"
"plw20=plw11*pow(p11/18.52, 2)"
"plw21=plw11*pow(p11/18.52, 2)"
"plw22=plw11*pow(p11/19.23, 2)"
"plw23=plw11*pow(p11/18.94, 2)"
"plw24=plw11*pow(p11/18.94, 2)"
"plw25=plw11*pow(p11/17.48, 2)"
"plw26=plw11*pow(p11/17.86, 2)"
"plw27=plw11*pow(p11/18.52, 2)"
"plw28=plw11*pow(p11/17.36, 2)"

1 ze
#ifdef EXE1D
  d11
#else
  d11 st0
#endif
  d11 do:f1
  d11 do:f3
2 d11 do:f2
  d11*2
3 d11 do:f2
  d11*2
4 d11 do:f2
  d11*5
5 d11 do:f2
  d11 pl6:f2		; power for temperature compensation pulses
;
; The perl output should be inserted below.
; Change the order randomly.
;
; Paste here
;
if "l7==1" goto v01		; reference
if "l7==2" goto v02
if "l7==3" goto v03
if "l7==4" goto v04
if "l7==5" goto v05
if "l7==6" goto v06
if "l7==7" goto v07
if "l7==8" goto v08
if "l7==9" goto v09
if "l7==10" goto v10
if "l7==11" goto v02	; v11
if "l7==12" goto v12
if "l7==13" goto v13
if "l7==14" goto v14
if "l7==15" goto v15
if "l7==16" goto v16
if "l7==17" goto v17
if "l7==18" goto v18
;
; otherwise goto v21
;
v01, d11
   "l6=0"		; 0.00 Hz
   "d17=1m"		; dummy
   "l5=66"
   "d19=7.576m-p21"
   d11
   goto v70
v02, d11
   "l6=1"				; 50.00 Hz v=L6/[Tcp/2]
   "d17=5.00000m-p21"	; Tcp/(8*L6)
   "l5=62"				; L5=66-4*L6
   "d19=8.065m-p21"		; 1s/(2*L5)
   d11
   goto v70
v03, d11
   "l6=2"		; 100.00 Hz
   "d17=2.50000m-p21"
   "l5=58"
   "d19=8.621m-p21"
   d11
   goto v70
v04, d11
   "l6=3"		; 150.00 Hz
   "d17=1.66667m-p21"
   "l5=54"
   "d19=9.259m-p21"
   d11
   goto v70
v05, d11
   "l6=4"		; 200.00 Hz
   "d17=1.25000m-p21"
   "l5=50"
   "d19=10.000m-p21"
   d11
   goto v70
v06, d11
   "l6=5"		; 250.00 Hz
   "d17=1.00000m-p21"
   "l5=46"
   "d19=10.870m-p21"
   d11
   goto v70
v07, d11
   "l6=6"		; 300.00 Hz
   "d17=833.33u-p21"
   "l5=42"
   "d19=11.905m-p21"
   d11
   goto v70
v08, d11
   "l6=7"		; 350.00 Hz
   "d17=714.29u-p21"
   "l5=38"
   "d19=13.158m-p21"
   d11
   goto v70
v09, d11
   "l6=8"		; 400.00 Hz
   "d17=625.00u-p21"
   "l5=34"
   "d19=14.706m-p21"
   d11
   goto v70
v10, d11
   "l6=9"		; 450.00 Hz
   "d17=555.56u-p21"
   "l5=30"
   "d19=16.667m-p21"
   d11
   goto v70
v11, d11
   "l6=9"		; 450.00 Hz
   "d17=555.56u-p21"
   "l5=30"
   "d19=16.667m-p21"
   d11
   goto v70
v12, d11
   "l6=10"		; 500.00 Hz
   "d17=500.00u-p21"
   "l5=26"
   "d19=19.231m-p21"
   d11
   goto v70
v13, d11
   "l6=11"		; 550.00 Hz
   "d17=454.55u-p21"
   "l5=22"
   "d19=22.727m-p21"
   d11
   goto v70
v14, d11
   "l6=12"		; 600.00 Hz
   "d17=416.67u-p21"
   "l5=18"
   "d19=27.778m-p21"
   d11
   goto v70
v15, d11
   "l6=13"		; 650.00 Hz
   "d17=384.62u-p21"
   "l5=14"
   "d19=35.714m-p21"
   d11
   goto v70
v16, d11
   "l6=14"		; 700.00 Hz
   "d17=357.14u-p21"
   "l5=10"
   "d19=50.000m-p21"
   d11
   goto v70
v17, d11
   "l6=15"		; 750.00 Hz
   "d17=333.33u-p21"
   "l5=6"
   "d19=83.333m-p21"
   d11
   goto v70
v18, d11
   "l6=16"		; 800.00 Hz
   "d17=312.50u-p21"
   "l5=2"
   "d19=250.000m-p21"
   d11
   goto v70
;
;---------
; d14 = 40 m
; l8 = 18
;
   d11
v70, d29
;------------------- compensation
61 d19
   (p22 ph10):f2
   d19
   lo to 61 times l5
;----------------------- 1 sec.
  d11
  d11 UNBLKGRAD
  100u pl7:f2
  (p21 ph10):f2
  20u
  1mp:gp11
  200u
  200u pl1:f1
;
  (p1 ph10):f1
  20u
  1mp:gp13
  200u
  180u pl5:f2
  d21
  (d2 p2 ph10):f1 (p5 ph10 5u p6 ph11 5u p5 ph10):f2
  d21
  1mp:gp13
  400u
  (p1 ph9):f1
;
; In the case of methyl groups,
; the following delay (d24*2) should wait for about 1/(5J) instead of 1/(2J) to make the in-phase coherence
; Sin(Pi/5)*Cos(Pi/5)*Cos(Pi/5) is about 0.4
;
  10u			; or Gr
  (p5 ph10):f2
  10u
  400up:gp16
  d24
  (d2 p2 ph10):f1 (p5 ph10 5u p6 ph11 5u p5 ph10):f2
  10u
  400up:gp16
  d24
  (p5 ph11):f2
  10u
  1mp:gp18
  200u
  (p1 ph10):f1	; to purge any 1Hz component remaining
  10u
  1mp:gp15
  120u
  30u fq=cnst14:f2		; cpmg from off-resonance
  50u pl7:f2			; lower power(20-46u@90deg)
;  (p1 ph11):f1
;  d5
;  (p2 ph10):f1
;  10u
;
; ----- The following lines should be put before every CPMG pulse train. -----
;
if "l7==1" goto w01
if "l7==2" goto w02
if "l7==3" goto w03
if "l7==4" goto w04
if "l7==5" goto w05
if "l7==6" goto w06
if "l7==7" goto w07
if "l7==8" goto w08
if "l7==9" goto w09
if "l7==10" goto w10
if "l7==11" goto w02	; w11
if "l7==12" goto w12
if "l7==13" goto w13
if "l7==14" goto w14
if "l7==15" goto w15
if "l7==16" goto w16
if "l7==17" goto w17
if "l7==18" goto w18
;
w01, 20u pl11:f1
   goto w70
w02, 20u pl12:f1
   goto w70
w03, 20u pl13:f1
   goto w70
w04, 20u pl14:f1
   goto w70
w05, 20u pl15:f1
   goto w70
w06, 20u pl16:f1
   goto w70
w07, 20u pl17:f1
   goto w70
w08, 20u pl18:f1
   goto w70
w09, 20u pl19:f1
   goto w70
w10, 20u pl20:f1
   goto w70
w11, 20u pl21:f1
   goto w70
w12, 20u pl22:f1
   goto w70
w13, 20u pl23:f1
   goto w70
w14, 20u pl24:f1
   goto w70
w15, 20u pl25:f1
   goto w70
w16, 20u pl26:f1
   goto w70
w17, 20u pl27:f1
   goto w70
w18, 20u pl28:f1
   goto w70
;
w70, 20u
  1m cw:f1			; from x, the same as 20u cw:f1 ph10(=x)
;
; A sequence for aligning the 1H magnetization (is required).
;
(p21 ph10):f2
;------------------------ CPMGy Sy in-phase
if "l7==1" goto 62
60 d17			;tau-cp/8/n
   (p22 ph11):f2
   d17
   lo to 60 times l6
;------------------------ CPMGy-1
;------------------------ CPMGy Sy in-phase
if "l7==1" goto 62
59 d17			;tau-cp/8/n
   (p22 ph11):f2
   d17
   lo to 59 times l6
;------------------------ CPMGy-2
;
62 5u
   20u do:f1
;   1mp:gp12
;   200u
;   (p22 ph16):f2
   (p7 ph17):f2
   (p8 ph16):f2
   (p7 ph17):f2
   5u
;   1mp:gp12
;   200u
   20u cw:f1
;
;------------------------ CPMGy Sy in-phase
if "l7==1" goto 58
54 d17			;tau-cp/8/n
   (p22 ph11):f2
   d17
   lo to 54 times l6
;------------------------ CPMGy-3
;------------------------ CPMGy Sy in-phase
if "l7==1" goto 58
57 d17			;tau-cp/8/n
   (p22 ph11):f2
   d17
   lo to 57 times l6
;------------------------ CPMGy-4
;
58 (p21 ph1):f2		; 0, 2 after the CW-CPMGy
   1m
   20u do:f1
   1mp:gp14
   100u
   100u fq=0:f2
   100u pl5:f2
   100u pl1:f1
;
;----------- Echo-antiecho
; 1/(5J) for D23*2
;
  (p5 ph3):f2	; Cy for methyl
  10u
  600up:gp24
  d23
  d0
  (p1 ph11 5u p2 ph10 5u p1 ph11):f1
  d0
  (p6 ph6):f2
  d7
  600up:gp24*-1
  d23
  10u
  (p5 ph4):f2	; 2CxIzi for methyl
  10u
  1mp:gp17
  400u
  (p1 ph10):f1
;
  d22
;  (d6 p2 ph10):f1 (p6 ph10):f2
  (d2 p2 ph10):f1 (p5 ph10 5u p6 ph11 5u p5 ph10):f2
  d15
  400up:gp25*EA
  200u
  100u pl8:f2
  100u BLKGRAD
;
#ifdef EXE1D
  go=2 ph0 cpd2:f2
  d11 do:f2 wr #0
#else
  goscnp ph0 cpd2:f2
  d11 do:f2
  d11 iu7
  d11 st
  lo to 2 times nbl
  d11 ru7
  d11 ipp0 ipp1 ipp16
  d11 ipp9 ipp6 ipp17
  lo to 3 times ns
  d11 do:f2 wr #0 if #0 zd
  d11 ru7
  d11 igrad EA
  lo to 4 times 2
  d11 id0
  d11 ip0
  d11 ip0
  d11 ip3
  d11 ip3
  d11 ru7
  lo to 5 times l0
#endif
;
  100u do:f1
  100u do:f3
  100u do:f2
  100u BLKGRAD
exit

; gp24*600*2*0.25144953(13C) = gp25*400*1(1H), gp24=60%, gp25=45.26%

;ph1=0 2		; 1 3
ph1=2 0
ph0=0 2 0 2 2 0 2 0
ph3=0
ph4=1	;0
ph6=0 0 0 0 0 0 0 0
    2 2 2 2 2 2 2 2
ph8=0
ph10=0
ph11=1
ph25=0
ph5=1
ph16=0 0 2 2
ph17=2 2 0 0
ph9=1 1 1 1 3 3 3 3
ph12=2
ph13=3
;
